PsychoPy2experiment version="2020.1.2"
Settings
  Experiment info = {'participant':'', 'session':'01'}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = norm
  Window size (pixels) = [2560, 1440]
  color = black
  expName = stroop
  logging level = warning
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Routines
  Routine trial
    TextComponent word
      color [set every repeat] = $letterColor
      letterHeight = 0.2
      startVal [time (s)] = 0.5
      text [set every repeat] = $text
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    KeyboardComponent resp
      allowedKeys = 'left', 'down', 'right'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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  Routine instruct
    TextComponent instrText
      color = $[1, 1, 1]
      letterHeight = 0.1
      startVal [time (s)] = 0
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      text:
        练习结束。现在准备好开始做真正的Stroop任务了吗?

        记住要忽略你看到的词汇本身，然后根据字的颜色按这些键:
        看到红色的字按向左键
        看到绿色的字按向下键
        看到蓝色的字按向右键
        (按Esc键退出)

        现在按任意键就可以开始了！
    KeyboardComponent ready
      correctAns = thisTrial.corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = nothing
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  Routine instructPractice
    TextComponent instr1
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        在这个任务中，请忽略你看到的词汇本身，
        然后根据字的颜色在键盘上按这些键:
        看到红色的字按向左键
        看到绿色的字按向下键
        看到蓝色的字按向右键
        (按Esc键退出)

        现在我们先来练习一下
        按任意键开始
    KeyboardComponent ready1
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine thanks
    TextComponent thanksText
      color = $[1, 1, 1]
      font = arial
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = 实验结束，感谢参与！
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  Routine feedback
    CodeComponent message
      Code Type = Auto->JS
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      Begin Experiment:
        #msg variable just needs some value at start
        msg=''
        #!!!!!!!!!!!!!!!!!!!!!!!
        #!!!!!!!!!!!
        #!!!!!!!!!!!!!!!!!!!!!!!!!!!!
      Begin Routine:
        if resp.corr:#stored on last run routine
          msg="正确! 反应时=%.3f" %(resp.rt)
        else:
          msg="糟糕，按错了！"
    TextComponent feedback_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
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Flow
  Routine instructPractice
  LoopInitiator practice loopType="TrialHandler"
    conditionsFile = trialTypes.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'text': 'red', 'congruent': 'cong', 'corrAns': 'left', 'letterColor': 'red'},
      {'text': 'red', 'congruent': 'cong', 'corrAns': 'left', 'letterColor': 'red'},
      {'text': 'red', 'congruent': 'incong', 'corrAns': 'down', 'letterColor': 'green'},
      {'text': 'red', 'congruent': 'incong', 'corrAns': 'right', 'letterColor': 'blue'},
      {'text': 'green', 'congruent': 'incong', 'corrAns': 'left', 'letterColor': 'red'},
      {'text': 'green', 'congruent': 'cong', 'corrAns': 'down', 'letterColor': 'green'},
      {'text': 'green', 'congruent': 'cong', 'corrAns': 'down', 'letterColor': 'green'},
      {'text': 'green', 'congruent': 'incong', 'corrAns': 'right', 'letterColor': 'blue'},
      {'text': 'blue', 'congruent': 'incong', 'corrAns': 'left', 'letterColor': 'red'},
      {'text': 'blue', 'congruent': 'incong', 'corrAns': 'down', 'letterColor': 'green'},
      {'text': 'blue', 'congruent': 'cong', 'corrAns': 'right', 'letterColor': 'blue'},
      {'text': 'blue', 'congruent': 'cong', 'corrAns': 'right', 'letterColor': 'blue'}]
    Routine trial
    Routine feedback
  LoopTerminator practice
  Routine instruct
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trialTypes.xlsx
    endPoints = [1, 2]
    loopType = random
    nReps = 5
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    conditions:
      [{'text': 'red', 'congruent': 'cong', 'corrAns': 'left', 'letterColor': 'red'},
      {'text': 'red', 'congruent': 'cong', 'corrAns': 'left', 'letterColor': 'red'},
      {'text': 'red', 'congruent': 'incong', 'corrAns': 'down', 'letterColor': 'green'},
      {'text': 'red', 'congruent': 'incong', 'corrAns': 'right', 'letterColor': 'blue'},
      {'text': 'green', 'congruent': 'incong', 'corrAns': 'left', 'letterColor': 'red'},
      {'text': 'green', 'congruent': 'cong', 'corrAns': 'down', 'letterColor': 'green'},
      {'text': 'green', 'congruent': 'cong', 'corrAns': 'down', 'letterColor': 'green'},
      {'text': 'green', 'congruent': 'incong', 'corrAns': 'right', 'letterColor': 'blue'},
      {'text': 'blue', 'congruent': 'incong', 'corrAns': 'left', 'letterColor': 'red'},
      {'text': 'blue', 'congruent': 'incong', 'corrAns': 'down', 'letterColor': 'green'},
      {'text': 'blue', 'congruent': 'cong', 'corrAns': 'right', 'letterColor': 'blue'},
      {'text': 'blue', 'congruent': 'cong', 'corrAns': 'right', 'letterColor': 'blue'}]
    Routine trial
  LoopTerminator trials
  Routine thanks
